PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  expName = delay_discounting
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + "GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Delay_Discounting_Excel_file.csv
    loopType = random
    nReps = 9
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)]),
      OrderedDict([('reward_today', 20), ('future_reward', 45), ('delay', 10)]),
      OrderedDict([('reward_today', 33), ('future_reward', 55), ('delay', 30)]),
      OrderedDict([('reward_today', 50), ('future_reward', 65), ('delay', 50)]),
      OrderedDict([('reward_today', 18), ('future_reward', 40), ('delay', 5)]),
      OrderedDict([('reward_today', 60), ('future_reward', 120), ('delay', 90)])]
    Routine trial
  LoopTerminator trials
